PsychoPy2experiment version="3.0.0b8"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = 10:25_test
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Routines
  Routine trial
    TextComponent stims
      color = black
      durationEstim = 5
      letterHeight = 0.1
      startEstim = 0
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      durationEstim = 1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent interval_stim
      fillColor = $[1,1,1]
      lineWidth = 0.25
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine instr
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      durationEstim = 2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent instructions
      color = black
      durationEstim = 5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Press the space bar when
        you finish reading the
        sentence, then focus on the cross that appears at the center of the screen.
Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ../../../../Users/kavyaramakrishnan/Desktop/psychopy_demo/stims.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('step', 1), ('stim', 'sounds/bear1.wav'), ('text', 'This is Sound 1')]),
      OrderedDict([('step', 2), ('stim', 'sounds/bear2.wav'), ('text', 'This is Sound 2')]),
      OrderedDict([('step', 3), ('stim', 'sounds/bear3.wav'), ('text', 'This is Sound 3')]),
      OrderedDict([('step', 4), ('stim', 'sounds/bear4.wav'), ('text', 'This is Sound 4')]),
      OrderedDict([('step', 5), ('stim', 'sounds/bear5.wav'), ('text', 'This is Sound 5')]),
      OrderedDict([('step', 6), ('stim', 'sounds/bear6.wav'), ('text', 'This is Sound 6')]),
      OrderedDict([('step', 7), ('stim', 'sounds/bear7.wav'), ('text', 'This is Sound 7')]),
      OrderedDict([('step', 8), ('stim', 'sounds/bear8.wav'), ('text', 'This is Sound 8')]),
      OrderedDict([('step', 9), ('stim', 'sounds/bear9.wav'), ('text', 'This is Sound 9')])]
    Routine trial
  LoopTerminator trials
