PsychoPy2experiment version="3.0.0b8"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = 11-13_test
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Routines
  Routine instr
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      durationEstim = 2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent instructions
      color = black
      durationEstim = 5
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
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      text:
        INSTRUCTIONS:

        A sentence will appear at the center of the screen.

        After you have read the sentence on the screen, please press the space button.

        Please focus on the cross that will then appear at the center of the screen.

        After a red box appears around the cross, hit the space bar to go on to the next sentence.

        You should read as quickly as possible while still understanding the sentence. Please read these sentences for comprehension, as you will be asked questions on their content.

        Please press the "f" key for yes or the "j" key for no on the comprehension questions. You will be scored on your number correct.
  Routine trial2
    TextComponent text
      color = black
      durationEstim = 5
      letterHeight = 0.1
      startEstim = 0
      startVal [time (s)] = 0
      text [set every repeat] = $trial2
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      durationEstim = 1
      forceEndRoutine = True
      startEstim = 0
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent interval_stim2
      fillColor = $[1,1,1]
      lineWidth = 0.25
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine question
    TextComponent text_2
      color = black
      durationEstim = 5
      letterHeight = 0.1
      startEstim = 0
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    KeyboardComponent key_resp_5
      allowedKeys = 'f', 'j'
      correctAns = $corrAns
      discard previous = False
      durationEstim = 1
      forceEndRoutine = True
      startEstim = 0
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent interval_stim3
      fillColor = $[1,1,1]
      lineWidth = 0.25
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine trial1
    TextComponent stims
      color = black
      durationEstim = 5
      letterHeight = 0.1
      startEstim = 0
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial1
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      durationEstim = 1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent interval_stim
      fillColor = $[1,1,1]
      lineWidth = 0.25
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine interval_stim_trial3
    PolygonComponent in_stim3
      fillColor = $[1,1,1]
      lineWidth = 0.25
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine interval_stim_trial1
    PolygonComponent in_stim1
      fillColor = $[1,1,1]
      lineWidth = 0.25
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine interval_stim_trial2
    PolygonComponent in_stim2
      fillColor = $[1,1,1]
      lineWidth = 0.25
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine end_instr
    TextComponent text_3
      color = black
      durationEstim = 5
      letterHeight = 0.1
      startEstim = 0
      startVal [time (s)] = 0.0
      text = You are done with the experiment! Please stand up and let the experimenter know. 
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      discard previous = False
      durationEstim = 1
      forceEndRoutine = True
      startEstim = 0
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stims_original.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trialNum', 1), ('trial1', 'The cat liked the milk. '), ('trial2', 'The dog liked the soup. '), ('question', 'Did the dog like the milk? '), ('corrAns', 'j')]),
      OrderedDict([('trialNum', 2), ('trial1', 'The child liked the cheese.'), ('trial2', 'The ocelot liked the ham. '), ('question', 'Did the orangutan like the cheese? '), ('corrAns', 'j')]),
      OrderedDict([('trialNum', 3), ('trial1', 'The elephant liked the peanuts. '), ('trial2', 'The megalodon liked the fish. '), ('question', 'Did the elephant like the fish? '), ('corrAns', 'j')]),
      OrderedDict([('trialNum', 4), ('trial1', 'The komodo dragon liked the meat. '), ('trial2', 'The mouse liked the lab room. '), ('question', 'Did the mouse like the lab room? '), ('corrAns', 'f')]),
      OrderedDict([('trialNum', 5), ('trial1', 'The blue whale liked the algae. '), ('trial2', 'The echidna liked the bugs. '), ('question', 'Did the blue whale like the algae? '), ('corrAns', 'f')])]
    Routine trial1
    Routine interval_stim_trial1
    Routine trial2
    Routine interval_stim_trial2
    Routine question
    Routine interval_stim_trial3
  LoopTerminator trials
  Routine end_instr
